<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>23525079</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.FrameID</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\exp 29.05.26\rec3\timestamps_cam_1.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\exp 29.05.26\rec3\cam_1.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>MJPG</cv:FourCC>
          <cv:FrameRate>60</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="spk:SpinnakerCapture">
          <spk:Index xsi:nil="true" />
          <spk:SerialNumber>23525080</spk:SerialNumber>
          <spk:ColorProcessing>Default</spk:ColorProcessing>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ChunkData.FrameID</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>D:\exp 29.05.26\rec3\timestamps_cam_2.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\exp 29.05.26\rec3\cam_2.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>MJPG</cv:FourCC>
          <cv:FrameRate>60</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="0" To="5" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="7" To="12" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>